CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:5
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<raw>.*)-(?P<pre_post>.*)-L(?P<layer>.*)-(?P<sample>.)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:raw
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:2.33
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Watershed:[module_num:5|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
    Select the input image:raw
    Name the output object:Watershed
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:3
    Separate watershed labels:No
