CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:2.33
    Select the rule criteria:and (file does contain "ch1.tif")
    Name to assign these images:AB
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ch2.tif")
    Name to assign these images:Kv
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Watershed:[module_num:5|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
    Select the input image:AB
    Name the output object:AB_objects
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:50
    Downsample:1
    Separate watershed labels:No

Watershed:[module_num:6|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
    Select the input image:Kv
    Name the output object:Kv_objects
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:50
    Downsample:1
    Separate watershed labels:No

MeasureColocalization:[module_num:7|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
    Hidden:2
    Hidden:3
    Select an image to measure:AB
    Select an image to measure:Kv
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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
MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:AB_objects
    Select objects to measure:Kv_objects
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:AB_objects
    Name the output image:AB_mask
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Kv_objects
    Name the output image:Kv_mask
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:AB_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:AB
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_bin
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|iterative direct ExM\\20200716 AD Cluster Crops\\ROIs\\bin\\bin2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:Kv_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:Kv
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_bin
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|iterative direct ExM\\20200716 AD Cluster Crops\\ROIs\\bin\\bin2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|iterative direct ExM\\20200716 AD Cluster Crops
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:AB_objects|Location_Center_Y,AB_objects|Location_Center_X,AB_objects|Location_Center_Z,AB_objects|Number_Object_Number,AB_objects|AreaShape_FormFactor,AB_objects|AreaShape_Center_Y,AB_objects|AreaShape_Center_X,AB_objects|AreaShape_Center_Z,AB_objects|AreaShape_MajorAxisLength,AB_objects|AreaShape_MinFeretDiameter,AB_objects|AreaShape_Solidity,AB_objects|AreaShape_MaxFeretDiameter,AB_objects|AreaShape_EulerNumber,AB_objects|AreaShape_Volume,AB_objects|AreaShape_MedianRadius,AB_objects|AreaShape_Compactness,AB_objects|AreaShape_Extent,AB_objects|AreaShape_SurfaceArea,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:image_data_ABclusters_20200803.csv
    Use the object name for the file name?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:AB_objects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Kv_objects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
