CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:2.33
    Select the rule criteria:and (file does contain "ch1.tif")
    Name to assign these images:Nav
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ch2.tif")
    Name to assign these images:AB
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Watershed:[module_num:5|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
    Select the input image:AB
    Name the output object:AB_objects
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:15
    Downsample:1
    Separate watershed labels:No

Watershed:[module_num:6|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
    Select the input image:Nav
    Name the output object:Nav_objects
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:15
    Downsample:1
    Separate watershed labels:No

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:AB_objects
    Name the output image:AB_mask
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:Nav_objects
    Name the output image:Nav_mask
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:AB_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:AB
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_bin
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\BoydenLabber\\Dropbox (MIT)\\iterative direct ExM\\20210506 AD Cluster Crops\\ROIs\\masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:Nav_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nav
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_bin
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\BoydenLabber\\Dropbox (MIT)\\iterative direct ExM\\20210506 AD Cluster Crops\\ROIs\\masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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